CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:32
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:or (extension does istif) (file does contain "npy")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:.*(?P<Plate>[a-zA-Z0-9]{4})_20x1.0_acq1_(?P<Well>[0-9A-Z]{2})-Pos_(?P<Row>[0-9]{3})_(?P<Col>[0-9]{3})_ch(?P<Channel>.)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'IllummCh': None, u'OrigmCh': u'Well', u'OrigActin': u'Well', u'IllumActin': None, u'OrigDNA': u'Well', u'IllumDNA': None}, {u'IllummCh': None, u'OrigmCh': u'Row', u'OrigActin': u'Row', u'IllumActin': None, u'OrigDNA': u'Row', u'IllumDNA': None}, {u'IllummCh': None, u'OrigmCh': u'Col', u'OrigActin': u'Col', u'IllumActin': None, u'OrigDNA': u'Col', u'IllumDNA': None}]
    Image set matching method:Metadata
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    Assignments count:6
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "3") (file does contain ".tif")
    Name to assign these images:OrigDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "1") (file does contain ".tif")
    Name to assign these images:OrigActin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "2") (file does contain ".tif")
    Name to assign these images:OrigmCh
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "IllumDNA") (file does contain ".npy")
    Name to assign these images:IllumDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "IllumActin") (file does contain ".npy")
    Name to assign these images:IllumActin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "IllummCh") (file does contain ".npy")
    Name to assign these images:IllummCh
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationApply:[module_num:5|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
    Select the input image:OrigDNA
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigActin
    Name the output image:CorrActin
    Select the illumination function:IllumActin
    Select how the illumination function is applied:Divide
    Select the input image:OrigmCh
    Name the output image:CorrmCh
    Select the illumination function:IllummCh
    Select how the illumination function is applied:Divide

ImageMath:[module_num:6|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enabled:False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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
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    Multiply the first image by:1.0
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    Image or measurement?:Image
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    Multiply the second image by:1.0
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
MeasureImageQuality:[module_num:7|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:4
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:2
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureImageQuality:[module_num:8|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:origDNA
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
FlagImage:[module_num:9|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enabled:False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
    Hidden:2
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag_isSaturated
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_origDNA
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:.25
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    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag_isBlurry
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_origActin
    Flag images based on low values?:Yes
    Minimum value:-2.0
    Flag images based on high values?:No
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:CorrDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After declumping only
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0125,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:CorrActin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.015,1
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:12|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enabled:False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
    Select the larger identified objects:Cells
    Select the smaller identified objects:FilteredNuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:13|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enabled:False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
    Hidden:3
    Select an image to measure:CorrDNA
    Select an image to measure:CorrActin
    Select an image to measure:CorrmCh
    Select objects to measure:FilteredNuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm

MeasureImageAreaOccupied:[module_num:14|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enabled:False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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Cells
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
MeasureObjectNeighbors:[module_num:15|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enabled:False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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:CellNeighborCount_Distance
    Select colormap:Default
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:CellPercentTouching_Distance
    Select colormap:Default

MeasureObjectNeighbors:[module_num:16|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enabled:False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
    Select objects to measure:FilteredNuclei
    Select neighboring objects to measure:FilteredNuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:1
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:NucleusNeighborCount_Distance
    Select colormap:Default
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:NucleusPercentTouching_Distance
    Select colormap:Default

MeasureObjectNeighbors:[module_num:17|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enabled:False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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:CellNeighborCount_Adjacent
    Select colormap:Default
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:CellPercentTouching_Adjacent
    Select colormap:Default

MeasureObjectSizeShape:[module_num:18|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enabled:False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
    Select objects to measure:Cells
    Select objects to measure:FilteredNuclei
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:Yes

OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:Yes
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    Name the output image:NucleusOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:FilteredNuclei

OverlayOutlines:[module_num:20|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
    Display outlines on a blank image?:Yes
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    Name the output image:CellOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Cells

OverlayOutlines:[module_num:21|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CorrDNA
    Name the output image:NucleusOutlines_overlayCorrDNA
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#21FE06
    Select objects to display:FilteredNuclei

OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CorrActin
    Name the output image:CellOutlines_overlayCorrActin
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#21FE06
    Select objects to display:Cells

OverlayOutlines:[module_num:23|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CorrmCh
    Name the output image:CellOutlines_overlayCorrmCh
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#21FE06
    Select objects to display:Cells

SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:NucleusOutlines
    Select method for constructing file names:Single name
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    Enter single file name:ar014b_\g<Well>-\g<Row>-\g<Col>_nucleusOutlines
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    Saved file format:tiff
    Output file location:Default Output Folder|Downloads/CP
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:NucleusOutlines_overlayCorrDNA
    Select method for constructing file names:Single name
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    Enter single file name:ar014b_\g<Well>-\g<Row>-\g<Col>_nucleusOutlines-corrDNA
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    Saved file format:tiff
    Output file location:Default Output Folder|Downloads/CP
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:CellOutlines
    Select method for constructing file names:Single name
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    Enter single file name:ar014b_\g<Well>-\g<Row>-\g<Col>_cellOutlines
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    Saved file format:tiff
    Output file location:Default Output Folder|Downloads/CP
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:CellOutlines_overlayCorrActin
    Select method for constructing file names:Single name
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    Enter single file name:ar014b_\g<Well>-\g<Row>-\g<Col>_cellOutlines-corrActin
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    Saved file format:tiff
    Output file location:Default Output Folder|Downloads/CP
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:CellOutlines_overlayCorrActin
    Select method for constructing file names:Single name
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    Enter single file name:ar014b_\g<Well>-\g<Row>-\g<Col>_cellOutlines-corrActin
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop/distribution/docker/output
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToDatabase:[module_num:29|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enabled:False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
    Database type:MySQL
    Database name:DefaultDB
    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
    Database host:
    Username:
    Password:
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    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
    Calculate the per-well mean values of object measurements?:No
    Calculate the per-well median values of object measurements?:No
    Calculate the per-well standard deviation values of object measurements?:No
    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Experiment name:MyExpt
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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
CreateBatchFiles:[module_num:30|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/Users/mansimehrotra
    Cluster root path:/Users/mansimehrotra

ExportToSpreadsheet:[module_num:31|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:u26a_ar014b_analysis
    Overwrite existing files without warning?:No
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
CreateBatchFiles:[module_num:32|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/Users/lorenzo
    Cluster root path:/Users/lorenzo
